PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = OperationSpanTask
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Routines
  Routine warning1
    TextComponent text_5
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = The next trial will now begin.
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  Routine mem
    TextComponent text_2
      color = blue
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Letter
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  Routine Recall
    TextComponent text_3
      color = red
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      text = ?
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    KeyboardComponent key_resp_3
      allowedKeys = 'q','r','t','p','s','d','f','g','h','j','k','l','z','x','c','v','b','n','m'
      correctAns = $CorAns
      forceEndRoutine = False
      startVal [time (s)] = 0
      store = all keys
      storeCorrect = True
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.3
      text [set every repeat] = $Stimulus
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $Answer
      forceEndRoutine = True
      startVal [time (s)] = 0.3
      storeCorrect = True
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  Routine instructions
    TextComponent text_4
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        In this task you will have to do two things at the same time.
        Firstly, mathematical calculations with a result will appear on the screen. For example: (2 + 2) x2 = 8
        You will have to decide if they are correct or incorrect. Press the right arrow on the keyboard if the result is correct and the left arrow if it is incorrect.
        Secondly, blue letters will appear briefly in the center of the screen. You will have to memorize them.
        When a red question mark appears, press the letters that have appeared on the keyboard in the same order in which they appeared.When you are done, press the space bar.
        After the red question mark, a new trial will begin and you can forget the previous letters.
        Before we start we will do two example trials. Try to stay focused, as the task will become increasingly complex, with more calculations to solve and more letters to memorize.

        PLEASE DO NOT ABANDON THE TEST UNTIL IT IS FINISHED

        Press the space bar to begin
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      store = nothing
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  Routine warning
    TextComponent text_6
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = A demo trial will now begin.
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Flow
  Routine instructions
  LoopInitiator demo loopType="TrialHandler"
    Selected rows = 0:2
    conditionsFile = Blocks.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'SelectBlock': 'Block1.xlsx'},
      {'SelectBlock': 'Block2.xlsx'},
      {'SelectBlock': 'Block3.xlsx'}]
    Routine warning
    LoopInitiator trial1 loopType="TrialHandler"
      Selected rows = 0:2
      conditionsFile = $SelectBlock
      loopType = sequential
      nReps = 1
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      Routine trial
      Routine mem
    LoopTerminator trial1
    Routine Recall
  LoopTerminator demo
  LoopInitiator span2 loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = Blocks.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'SelectBlock': 'Block1.xlsx'},
      {'SelectBlock': 'Block2.xlsx'},
      {'SelectBlock': 'Block3.xlsx'}]
    Routine warning1
    LoopInitiator trial2 loopType="TrialHandler"
      Selected rows = 2:4
      conditionsFile = $SelectBlock
      loopType = sequential
      nReps = 1
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      Routine trial
      Routine mem
    LoopTerminator trial2
    Routine Recall
  LoopTerminator span2
  LoopInitiator span3 loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = Blocks.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'SelectBlock': 'Block1.xlsx'},
      {'SelectBlock': 'Block2.xlsx'},
      {'SelectBlock': 'Block3.xlsx'}]
    Routine warning1
    LoopInitiator trial3 loopType="TrialHandler"
      Selected rows = 4:7
      conditionsFile = $SelectBlock
      loopType = sequential
      nReps = 1
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      Routine trial
      Routine mem
    LoopTerminator trial3
    Routine Recall
  LoopTerminator span3
  LoopInitiator span4 loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = Blocks.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'SelectBlock': 'Block1.xlsx'},
      {'SelectBlock': 'Block2.xlsx'},
      {'SelectBlock': 'Block3.xlsx'}]
    Routine warning1
    LoopInitiator trial4 loopType="TrialHandler"
      Selected rows = 7:11
      conditionsFile = $SelectBlock
      loopType = sequential
      nReps = 1
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      Routine trial
      Routine mem
    LoopTerminator trial4
    Routine Recall
  LoopTerminator span4
  LoopInitiator span5 loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = Blocks.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'SelectBlock': 'Block1.xlsx'},
      {'SelectBlock': 'Block2.xlsx'},
      {'SelectBlock': 'Block3.xlsx'}]
    Routine warning1
    LoopInitiator trial5 loopType="TrialHandler"
      Selected rows = 11:16
      conditionsFile = $SelectBlock
      loopType = sequential
      nReps = 1
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      Routine trial
      Routine mem
    LoopTerminator trial5
    Routine Recall
  LoopTerminator span5
  LoopInitiator span6 loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = Blocks.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'SelectBlock': 'Block1.xlsx'},
      {'SelectBlock': 'Block2.xlsx'},
      {'SelectBlock': 'Block3.xlsx'}]
    Routine warning1
    LoopInitiator trial6 loopType="TrialHandler"
      Selected rows = 16:22
      conditionsFile = $SelectBlock
      loopType = sequential
      nReps = 1
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      Routine trial
      Routine mem
    LoopTerminator trial6
    Routine Recall
  LoopTerminator span6
